e
#############
# MethodSCRIPT example for potentiostats by PalmSens BV - www.palmsens.com
#
#
# Description:  This example shows how to run three CVs on the Sensit BT
#               every CV starts at the push of the trigger button
#               results are stored on the internal storage
#
# MethodSCRIPT version: 1.3
# Last modified: 17/05/2023
# Applies to: Sensit BT (with EmStat Pico)
# Go to www.palmsens.com/msmanual for the MethodSCRIPT Manual
#
# Copyright (c) 2026 PalmSens BV
# This source code is licensed under the MIT license found in the
# LICENSE file in the root directory of this source tree.
# THE SOFTWARE IS PROVIDED "AS IS", WITHOUT WARRANTY OF ANY KIND.
#
#############
#The following line is only needed for EmStat Pico based devices. Bitmask followed by 2 for enabling SPI flash memory
set_gpio_cfg 0x1E 2
file_open "/Measurements/three_cvs.dmeas" 0
#set_script_output options:
#0 = Disable the output of the script completely.
#1 = Output to the normal output channel (default).
#2 = Output to file storage.
#3 = Output to both normal channel and file storage.
set_script_output 2
var i
var c
var p
var d
############# Measurement initialisation #############
set_pgstat_chan 0
set_pgstat_mode 2
set_max_bandwidth 400
set_range_minmax da -1 1
set_range ba 100u
set_autoranging ba 1u 1m
set_e -500m
#make sure to start the loop at i=0
store_var i 0i aa
#start a loop with 3 iteratons
loop i < 3i
    ############# wait for trigger button here #############
    get_gpio d
    loop d & 0x80
        get_gpio d
    endloop
    #
    cell_on
    meas_loop_cv p c -500m -1 1 10m 1
        pck_start
        pck_add p
        pck_add c
        pck_end
    endloop
    cell_off
    add_var i 1i
endloop
on_finished:
file_close
cell_off

