e
#############
# MethodSCRIPT example for potentiostats by PalmSens BV - www.palmsens.com
#
#
# Description:  Performs a Chronoamperometry (CA) measurement on all multiplexer channels.
#               The CA is performed on each channel one after the other.
#
#
# MethodSCRIPT version: 1.8
# Last modified: 15/12/2025
# Applies to: EmStat4 instruments with a mux
# Go to www.palmsens.com/msmanual for the MethodSCRIPT Manual
#
# Copyright (c) 2026 PalmSens BV
# This source code is licensed under the MIT license found in the
# LICENSE file in the root directory of this source tree.
# THE SOFTWARE IS PROVIDED "AS IS", WITHOUT WARRANTY OF ANY KIND.
#
#############
#
# Enable the MUX type and configuration
# 1 = MUX8; 2 = MUX16; 3 = MUX8-R2
# 0x0002 = Switch box 1; 0x0004 Switch box 2; 0x0008 OCP mode enable;
# 0x0010 Common RE and CE; 0x0020 Connect RE to CE; 0x0040 Connect SE to WE
# 0x0100 WE mode (0x0000 = float, 0x0100 = GND)
# Connect RE to CE and have inactive WE floating
mux_config 3i 0x0020
# Store the amount of attached mux channels
var channels
mux_get_channel_count channels
var potential
var current
var dc_potential
var time_interval
var time_run
var t
var i
store_var i 1i ja
# set technique variables
store_var dc_potential 100m ja
store_var time_interval 100m ja
store_var time_run 5 ja
############# Measurement initialisation #############
set_pgstat_chan 0
set_pgstat_mode 3
set_max_bandwidth 300
set_range ba 100u
set_autoranging ba 59n 100u
set_e dc_potential # set begin potential when cell turns on
cell_on
loop i <= channels
    mux_set_channel i
    # settle for 5ms after setting the channel
    wait 5m
    timer_start
    meas_loop_ca potential current dc_potential time_interval time_run
        timer_get t
        pck_start
            pck_add t
            pck_add potential
            pck_add current
        pck_end
    endloop
    add_var i 1i
endloop
on_finished:
    cell_off

